CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Documents\\data\\images\\cellpainting\\cpg0016-jump\\data\\EC000005
    Name of the file:metadata_subset_wide.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:WellFrame
    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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notes:['QC of images']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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:DNA, ER, actin_golgi_wga, mito, nucl_cytoRNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:3|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notes:['Measure the threshold which will be used for thresholding nucleus.']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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:DNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

IdentifyPrimaryObjects:[module_num:4|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notes:['Nucleus detection. Threshold can be set up using QCs']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
    Select the input image:DNA
    Name the primary objects to be identified:NucleiWithEdges
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:01.0
    Threshold correction factor:1.00
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:5|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notes:['Identification of full cell. Threshold correciton factor is quite impactful.']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
    Select the input objects:NucleiWithEdges
    Name the objects to be identified:CellsWithEdges
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:nucl_cytoRNA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.005,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
FilterObjects:[module_num:6|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notes:['Removing object touching the edges']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
    Select the objects to filter:NucleiWithEdges
    Name the output objects:Nuclei
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select additional object to relabel:CellsWithEdges
    Name the relabeled objects:Cells
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
IdentifyTertiaryObjects:[module_num:7|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notes:['Extract the cytoplasm']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:8|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
    Select images to measure:DNA, ER
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:9|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
    Select images to measure:DNA, ER
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:DNA, ER
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectIntensityDistribution:[module_num:11|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
    Select images to measure:DNA, ER
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:13|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
    Select images to measure:DNA, ER, mito, nucl_cytoRNA
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

MaskImage:[module_num:14|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
    Select the input image:DNA
    Name the output image:DNA_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsWithEdges
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    Invert the mask?:Yes

MaskImage:[module_num:15|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
    Select the input image:ER
    Name the output image:ER_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsWithEdges
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    Invert the mask?:Yes

MaskImage:[module_num:16|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
    Select the input image:mito
    Name the output image:mito_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsWithEdges
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    Invert the mask?:Yes

MaskImage:[module_num:17|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
    Select the input image:actin_golgi_wga
    Name the output image:AGW_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsWithEdges
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:18|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notes:['Measuring intensities']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
    Select images to measure:AGW_BackgroundOnly, DNA, DNA_BackgroundOnly, ER, ER_BackgroundOnly, actin_golgi_wga, mito
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
GrayToColor:[module_num:19|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:DNA
    Select the image to be colored green:ER
    Select the image to be colored blue:mito
    Name the output image:CellOverview
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CellOverview
    Name the output image:CellOverviewWithOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:magenta
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:Cells

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:CellOverviewWithOutlines
    Select method for constructing file names:Single name
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    Enter single file name:CellOverview_\g<WellFrame>
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|overview
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|measures
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|Texture_Variance_mito_3_01_256,Nuclei|Texture_Variance_mito_3_03_256,Nuclei|Texture_Variance_mito_3_02_256,Nuclei|Texture_Variance_mito_3_00_256,Nuclei|Texture_Variance_mito_5_00_256,Nuclei|Texture_Variance_mito_5_01_256,Nuclei|Texture_Variance_mito_5_02_256,Nuclei|Texture_Variance_mito_5_03_256,Nuclei|Texture_Variance_mito_10_00_256,Nuclei|Texture_Variance_mito_10_02_256,Nuclei|Texture_Variance_mito_10_01_256,Nuclei|Texture_Variance_mito_10_03_256,Nuclei|Texture_Variance_nucl_cytoRNA_10_02_256,Nuclei|Texture_Variance_nucl_cytoRNA_10_00_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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